PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = FashionMNIST 
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Routines
  Routine instructions
    TextComponent Einführung
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hallo!

        Willkommen zu unserer kleinen Studie zu künstlich generierten Bildern von Kleidungsstücken. Im Folgenden zeigen wir dir echte Bilder aus dem FashionMNIST Datenset von Zalando und auch künstlich generierte Bilder.
        Deine Aufgabe ist es zu unterscheiden welche Bilder echt und welche Bilder künstlich sind. Zuerst zeigen wir dir aber ein mal ein paar echte Beispielbilder.

        Drücke ‘Leertaste’ um fortzufahren
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine examples
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Beispielbild
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    ImageComponent image
      image = res/arrowkeys.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.4, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Real     or     Fake
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent stimulus
      image [set every repeat] = $path
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine example_images
    ImageComponent image_2
      image = exp_images/reals.png
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.03
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hier sind ein paar echte Beispiele. Bitte beachte, dass alle Bilder eine geringe Auflösung von 28x28 Pixeln haben. Es ist also normal, dass sie unscharf wirken. Im Folgenden zeigen wir dir noch einzelne Beispiele.

        Drücke die Leertaste um fortzufahren
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine example_trial
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Das ist ein echtes Bild!
        Leertaste zum Fortfahren
    KeyboardComponent key_resp_5
      allowedKeys = 'left','right', 'space', 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent stimulus_2
      image [set every repeat] = $path
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine trial_instructions
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wir starten jetzt mit dem Versuch!
        Dir werden in zufälliger Reihenfolge echte und küntliche Bilder gezeigt. Drücke die ‘linke Pfeiltaste’ bei einem echten und die ‘rechte Pfeiltaste’ bei einem künstlichen Bild.
    ImageComponent image_3
      image = res/arrowkeys.png
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.4, 0.12)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Real     or     Fake
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  Routine example_images
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $random(4)*10
    conditionsFile = exp_images/conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'real'), ('path', './exp_images/real/348.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/412.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/374.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/360.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/406.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/638.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/176.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/88.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/610.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/604.png')])]
    Routine example_trial
  LoopTerminator trials_2
  Routine trial_instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $random(100)*2000
    conditionsFile = exp_images/conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'real'), ('path', './exp_images/real/348.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/412.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/374.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/360.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/406.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/638.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/176.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/88.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/610.png')]),
      OrderedDict([('type', 'real'), ('path', './exp_images/real/604.png')])]
    Routine trial
  LoopTerminator trials
